PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = Individual Project
  keyboardBackend = ioHub
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Routines
  Routine semantic
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text [set every repeat] = $target
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "related", "unrelated"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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  Routine semprime
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Press 'space' when you have read all the words below
        rose
        dolphin
        sparrow
        bedsheets
        erasure
        pants
        tubelight
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine assoprime
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        press 'space' when you have read the words
        cat
        red
        tom
        spider
        love
        heart
        life
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine associative
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text [set every repeat] = $associative_target
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    SliderComponent slider_2
      forceEndRoutine = True
      granularity = 0
      labels = "related", "unrelated"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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Flow
  Routine semprime
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = C:/Users/hp/Downloads/semantic_target (1).xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'target': 'marigold'},
      {'target': 'sea lion'},
      {'target': 'pegion'},
      {'target': 'mattress'},
      {'target': 'paint'},
      {'target': 'handkerchief'},
      {'target': 'torch'},
      {'target': 'green'},
      {'target': 'mischief'},
      {'target': 'moustache'}]
    Routine semantic
  LoopTerminator trials
  Routine assoprime
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = C:/Users/hp/Downloads/associative_target (1).xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'associative_target': 'mouse'},
      {'associative_target': 'blue'},
      {'associative_target': 'jerry'},
      {'associative_target': 'web'},
      {'associative_target': 'birds'},
      {'associative_target': 'attack'},
      {'associative_target': 'jacket'},
      {'associative_target': 'wire'},
      {'associative_target': 'spectacle'},
      {'associative_target': 'flour'}]
    Routine associative
  LoopTerminator trials_2
